PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test-alevel
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Question1
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    ImageComponent imageQuestion
      image [set every repeat] = $Question_image
      size = (1.78, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4',
      correctAns = $Correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine kumnum
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    ImageComponent image
      image = image/kumnum.png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyskip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
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    ImageComponent imageBlank
      image = image/blank.png
      size = (1.78, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine kumnum
  LoopInitiator trialsArticle loopType="TrialHandler"
    conditionsFile = article_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Question_image': 'image/question1.png', 'Correct_key': 2},
      {'Question_image': 'image/question2.png', 'Correct_key': 4},
      {'Question_image': 'image/question3.png', 'Correct_key': 4},
      {'Question_image': 'image/question4.png', 'Correct_key': 4},
      {'Question_image': 'image/question5.png', 'Correct_key': 2},
      {'Question_image': 'image/question6.png', 'Correct_key': 3},
      {'Question_image': 'image/question7.png', 'Correct_key': 1},
      {'Question_image': 'image/question8.png', 'Correct_key': 2},
      {'Question_image': 'image/question9.png', 'Correct_key': 4},
      {'Question_image': 'image/question10.png', 'Correct_key': 1},
      {'Question_image': 'image/question11.png', 'Correct_key': 3},
      {'Question_image': 'image/question12.png', 'Correct_key': 3},
      {'Question_image': 'image/question13.png', 'Correct_key': 4},
      {'Question_image': 'image/question14.png', 'Correct_key': 3},
      {'Question_image': 'image/question15.png', 'Correct_key': 2},
      {'Question_image': 'image/question16.png', 'Correct_key': 2},
      {'Question_image': 'image/question17.png', 'Correct_key': 3},
      {'Question_image': 'image/question18.png', 'Correct_key': 2},
      {'Question_image': 'image/question19.png', 'Correct_key': 1},
      {'Question_image': 'image/question20.png', 'Correct_key': 4}]
    Routine Question1
    Routine blank
  LoopTerminator trialsArticle
